PsychoPy2experiment version="1.84.2"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'participant': u''}
  expName = CFEEEG_experiment
  Units = use prefs
  Screen = 1
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Routines
  Routine face_instructions
    TextComponent faceInstr_text
      text [set every repeat] = $face_instructions_text
      durationEstim = 5
      startVal [time (s)] = 0.0
      letterHeight = $font_size
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    KeyboardComponent faceInstr_resp
      durationEstim = 5
      forceEndRoutine = True
      allowedKeys = 'space','b'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine song_instructions
    TextComponent songInstr_text
      text [set every repeat] = $song_instructions_text
      durationEstim = 5
      startVal [time (s)] = 0.0
      letterHeight = $font_size
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    KeyboardComponent songInstr_resp
      durationEstim = 5
      forceEndRoutine = True
      allowedKeys = 'space','b'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine breathe_o_instructions
    TextComponent breathe_oInstr_text
      text [set every repeat] = $breathe_o_instructions_text
      durationEstim = 5
      startVal [time (s)] = 0.0
      letterHeight = $font_size
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    KeyboardComponent breathe_oInstr_resp
      durationEstim = 5
      forceEndRoutine = True
      allowedKeys = 'space','b'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine sport
    CodeComponent sport_code
      Begin Routine:
        send_message('sport_start')
    SoundComponent sport_stop
      sound = stimuli/01.wav
      stopVal [duration (s)] = 0.5
      startEstim = 10
      startVal [time (s)] = $task_length
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  Routine end
    TextComponent end_text
      durationEstim = 3
      startVal [time (s)] = 0.0
      letterHeight = $font_size
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      text:
        That is the end of the experiment.

        Thank you for participating!



        Press the space bar to close.
    KeyboardComponent end_resp
      durationEstim = 3
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine song
    CodeComponent song_code
      Begin Routine:
        send_message('song_start')
      End Routine:
        send_message('song_start')
    SoundComponent song_stop
      sound = stimuli/01.wav
      stopVal [duration (s)] = 0.5
      startEstim = 10
      startVal [time (s)] = $task_length
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  Routine speech_instructions
    TextComponent speechInstr_text
      text [set every repeat] = $speech_instructions_text
      durationEstim = 5
      startVal [time (s)] = 0.0
      letterHeight = $font_size
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    KeyboardComponent speechInstr_resp
      durationEstim = 5
      forceEndRoutine = True
      allowedKeys = 'space','b'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine speech
    CodeComponent speech_code
      Begin Routine:
        send_message('speech_start')
      End Routine:
        send_message('speech_start')
    SoundComponent speech_stop
      sound = stimuli/01.wav
      stopVal [duration (s)] = 0.5
      startEstim = 10
      startVal [time (s)] = $task_length
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  Routine breathe_instructions
    TextComponent breatheInstr_text
      text [set every repeat] = $breathe_instructions_text
      durationEstim = 5
      startVal [time (s)] = 0.0
      letterHeight = $font_size
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    KeyboardComponent breatheInstr_resp
      durationEstim = 5
      forceEndRoutine = True
      allowedKeys = 'space','b'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine breathe_o
    CodeComponent breathe_o_code
      Begin Routine:
        send_message('breathe_o_start')
      End Routine:
        send_message('breathe_o_end')
    TextComponent breathe_o_text
      text = +
      stopVal [duration (s)] = $task_length
      durationEstim = 10
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    SoundComponent breathe_o_stop
      sound = stimuli/01.wav
      stopVal [duration (s)] = 0.5
      startEstim = 10
      startVal [time (s)] = $task_length
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  Routine breathe
    CodeComponent breathe_code
      Begin Routine:
        tag = "breathe" # tag - probably task name
        sid = expInfo['participant'] # subject ID
        dur = task_length # duration of recording, in seconds

        start_record_message = {
          "type": "start-recording",
          "tag": tag,
          "duration": dur,
          "sid": sid,
        }

        tryrequest = urllib2.Request(url, data=json.dumps(start_record_message), headers=headers)
        nowgo = urllib2.urlopen(tryrequest)
    SoundComponent breathe_stop
      sound = stimuli/01.wav
      stopVal [duration (s)] = 0.5
      startEstim = 10
      startVal [time (s)] = $task_length
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  Routine welcome
    CodeComponent welc_code
      Begin Experiment:
        import OSC
        client = OSC.OSCClient()
        client.connect(('127.0.0.1', 5000))

        def send_message (addr):
            msg = OSC.OSCMessage()
            msg.setAddress('/Marker/'+addr)
            client.send(msg)

        task_length = 10
        font_size = 0.065
    TextComponent welc_text
      durationEstim = 5
      startVal [time (s)] = 0.0
      letterHeight = $font_size
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      text:
        Welcome!

        We will begin the experiment shortly.

        I will ask you to perform a sequence of ten different tasks while you are in this sitting, stationary position wearing the EEG device.

        Please find a comfortable posture now and try to stay still during the experiment.

        I will explain each task before it begins. Each task will be repeated ten times total, in two groups of five each. If you need to pause at any time, just let me know.

        To advance to the next screen please press the bottom button on the clicker. Please try not to press this button until you’re instructed to in the future.

        Press the button on the clicker when you're ready to begin.
    KeyboardComponent welc_resp
      durationEstim = 5
      forceEndRoutine = True
      allowedKeys = 'space','b'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine sport_instructions
    TextComponent sportInstr_text
      text [set every repeat] = $sport_instructions_text
      durationEstim = 5
      startVal [time (s)] = 0.0
      letterHeight = $font_size
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    KeyboardComponent sportInstr_resp
      durationEstim = 5
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'space','b'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine song_o_instructions
    TextComponent song_oInstr_text
      text [set every repeat] = $song_o_instructions_text
      durationEstim = 5
      startVal [time (s)] = 0.0
      letterHeight = $font_size
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    KeyboardComponent song_oInstr_resp
      durationEstim = 5
      forceEndRoutine = True
      allowedKeys = 'space','b'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine song_o
    CodeComponent song_o_code
      Begin Routine:
        send_message('song_o_start')
      End Routine:
        send_message('song_o_start')
    TextComponent song_o_text
      text = +
      stopVal [duration (s)] = $task_length
      durationEstim = 10
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    SoundComponent song_o_stop
      sound = stimuli/01.wav
      stopVal [duration (s)] = 0.5
      startEstim = 10
      startVal [time (s)] = $task_length
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  Routine face
    CodeComponent face_code
      Begin Routine:
        send_message('face_start')
      End Routine:
        send_message('face_end')
    SoundComponent face_stop
      sound = stimuli/01.wav
      stopVal [duration (s)] = 0.5
      startEstim = 10
      startVal [time (s)] = $task_length
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  Routine trial
Flow
  Routine welcome
  LoopInitiator experiment_runs loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    LoopInitiator breathe_loop loopType="TrialHandler"
      conditionsFile = task_instructions.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{u'sequence_instructions_text': u'For this task you will be imagining a face, a word, and a number following a sequence of cues that will be displayed on the screen. Take a moment now to choose a face (it can be the same as the previous task), a number, and a word. Please tell these to the experimenter each of these choices when you\'re ready.\n\nWhen you see a ":)" symbol imagine the face of the person you chose.\n\nWhen you see a "#" symbol, imagine the number you chose.\n\nWhen you see a "A" symbol, imagine the word you chose.\n\nThe whole sequence will last 10 seconds.\n\nPress the button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,
        {u'sequence_instructions_text': u"Next, please repeat this task. The instructions are the same.\n\nPress the button on the clicker when you're ready to begin.", u'song_o_instructions_text': u"Next, please repeat this task. The instructions are the same.\n\nPress the button on the clicker when you're ready to begin.", u'song_instructions_text': u"Next, please repeat this task. The instructions are the same.\n\nPress the button on the clicker when you're ready to begin.", u'listennoise_instructions_text': u"Next, please repeat this task. The instructions are the same.\n\nPress the button on the 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,
        {u'sequence_instructions_text': u"Next, please repeat this task. The instructions are the same.\n\nPress the button on the clicker when you're ready to begin.", u'song_o_instructions_text': u"Next, please repeat this task. The instructions are the same.\n\nPress the button on the clicker when you're ready to begin.", u'song_instructions_text': u"Next, please repeat this task. The instructions are the same.\n\nPress the button on the clicker when you're ready to begin.", u'listennoise_instructions_text': u"Next, please repeat this task. The instructions are the same.\n\nPress the button on the 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,
        {u'sequence_instructions_text': u"Next, please repeat this task. The instructions are the same.\n\nPress the button on the clicker when you're ready to begin.", u'song_o_instructions_text': u"Next, please repeat this task. The instructions are the same.\n\nPress the button on the clicker when you're ready to begin.", u'song_instructions_text': u"Next, please repeat this task. The instructions are the same.\n\nPress the button on the clicker when you're ready to begin.", u'listennoise_instructions_text': u"Next, please repeat this task. The instructions are the same.\n\nPress the button on the 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
      Routine breathe_instructions
      Routine breathe
    LoopTerminator breathe_loop
    LoopInitiator song_loop loopType="TrialHandler"
      conditionsFile = task_instructions.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine song_instructions
      Routine song
    LoopTerminator song_loop
    LoopInitiator song_o_loop loopType="TrialHandler"
      conditionsFile = task_instructions.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine song_o_instructions
      Routine song_o
    LoopTerminator song_o_loop
    LoopInitiator sport_loop loopType="TrialHandler"
      conditionsFile = task_instructions.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine sport_instructions
      Routine sport
    LoopTerminator sport_loop
    LoopInitiator breathe_o_loop loopType="TrialHandler"
      conditionsFile = task_instructions.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine breathe_o_instructions
      Routine breathe_o
    LoopTerminator breathe_o_loop
    LoopInitiator speech_loop loopType="TrialHandler"
      conditionsFile = task_instructions.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine speech_instructions
      Routine speech
    LoopTerminator speech_loop
    LoopInitiator face_loop loopType="TrialHandler"
      conditionsFile = task_instructions.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine face_instructions
      Routine face
    LoopTerminator face_loop
  LoopTerminator experiment_runs
  Routine end
